<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>LoomSequenceActive</rx:Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
        <rx:Name>LoomStateLog</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>H2Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>H2 Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>H2 Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>InitializeMovementSettings</Name>
        <Description>GroupName</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisableMotor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>32</harp:Address>
                        <harp:PayloadType>U16</harp:PayloadType>
                        <harp:Value>2</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnableHoming</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>32</harp:Address>
                        <harp:PayloadType>U16</harp:PayloadType>
                        <harp:Value>128</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinimumVelocity" Category="VelocityLimits" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMinimumVelocity</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="MinimumVelocity" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>42</harp:Address>
                        <harp:PayloadType>U16</harp:PayloadType>
                        <harp:Value>400</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MaximumVelocity" Category="VelocityLimits" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetMaximumVelocity</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="MaximumVelocity" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>43</harp:Address>
                        <harp:PayloadType>U16</harp:PayloadType>
                        <harp:Value>20000</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Acceleration" Category="AcceleratedMovement" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetAcceleration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Acceleration" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>44</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>10000</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Deceleration" Category="DeceleratedMovement" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetDeceleration</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Deceleration" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>45</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>-40000</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="AccelerationJerk" Category="AcceleratedMovement" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetAccelerationJerk</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="AccelerationJerk" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>46</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>-10000</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DecelerationJerk" Category="DeceleratedMovement" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SetDecelerationJerk</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="DecelerationJerk" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>47</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>-5000</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>H2Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="harp:CreateMessagePayload">
            <harp:Address>40</harp:Address>
            <harp:PayloadType>S32</harp:PayloadType>
            <harp:Value>3060</harp:Value>
          </harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>H2Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton Back Clear D H L Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Loom Drop Sequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomSequenceActive</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MotorActivationTime" />
              <Property Name="BrakeReleaseTime" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EngagingMotor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="MotorActivationTime" Category="EngageMotorTimings" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>EnablingMotor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="harp:CreateMessagePayload">
                              <harp:Address>32</harp:Address>
                              <harp:PayloadType>U16</harp:PayloadType>
                              <harp:Value>1</harp:Value>
                            </harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>H2Commands</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="MotorActivationTime" Description="Time to wait after we enable the motor untill we can use it" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>EnablingMotor</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomStateLog</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BrakeReleaseTime" Category="EngageMotorTimings" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>ReleasingBrake</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="harp:CreateMessagePayload">
                              <harp:Address>36</harp:Address>
                              <harp:PayloadType>U8</harp:PayloadType>
                              <harp:Value>1</harp:Value>
                            </harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>H2Commands</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="BrakeReleaseTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>ReleasingBrake</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomStateLog</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DropDistance" Category="Distances" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Dropping</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>H2 Events</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>37</harp:Address>
                      <harp:PayloadType>U8</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Motor Stopped Moving</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="DropDistance" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>40</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>3060</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Dropping</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="BottomPauseTime" Category="Timings" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Bottom</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>36</harp:Address>
                        <harp:PayloadType>U8</harp:PayloadType>
                        <harp:Value>1</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="BottomPauseTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Bottom</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="HomeDistance" Category="Distances" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Homing</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>H2 Events</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>49</harp:Address>
                      <harp:PayloadType>U8</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>HomingComplete</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>HomingComplete</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="rx:Condition">
                    <Name>HomingFailed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>2</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>HomingFailed</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:ThrowException">
                      <aeon:Message>HomingFailedException</aeon:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="HomeDistance" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>48</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>-3500</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Homing</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="7" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="11" To="15" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="HomeOffsetPauseTime" Category="Timings" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Home</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>36</harp:Address>
                        <harp:PayloadType>U8</harp:PayloadType>
                        <harp:Value>1</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="HomeOffsetPauseTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Home</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="HomeDistanceOffset" Category="Distances" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Home Offset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>H2 Events</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>37</harp:Address>
                      <harp:PayloadType>U8</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>MotorStoppedMoving</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                            <Value>0</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="HomeDistanceOffset" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>40</harp:Address>
                        <harp:PayloadType>S32</harp:PayloadType>
                        <harp:Value>42</harp:Value>
                      </harp:Payload>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>H2Commands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>HomeOffset</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LoomStateLog</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="5" To="9" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MotorDeactivationTime" />
              <Property Name="BrakeLockTime" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DisengagingMotor</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BrakeLockTime" Category="DisengageMotorTimings" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LockingBrake</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="harp:CreateMessagePayload">
                              <harp:Address>36</harp:Address>
                              <harp:PayloadType>U8</harp:PayloadType>
                              <harp:Value>0</harp:Value>
                            </harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>H2Commands</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="BrakeLockTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>LockingBrake</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomStateLog</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="MotorDeactivationTime" Category="DisengageMotorTimings" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DisablingMotor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateMessage">
                            <harp:MessageType>Write</harp:MessageType>
                            <harp:Payload xsi:type="harp:CreateMessagePayload">
                              <harp:Address>32</harp:Address>
                              <harp:PayloadType>U16</harp:PayloadType>
                              <harp:Value>2</harp:Value>
                            </harp:Payload>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>H2Commands</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="MotorDeactivationTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>DisablingMotor</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>LoomStateLog</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="4" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoomSequenceActive</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Retry" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Materialize" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>H2 Events</Name>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>44</harp:Address>
          <harp:PayloadType>S32</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>45</harp:Address>
          <harp:PayloadType>S32</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="zg:RollingGraphBuilder">
        <zg:SymbolType>None</zg:SymbolType>
        <zg:LineWidth>1</zg:LineWidth>
        <zg:CurveSettings />
        <zg:Capacity xsi:nil="true" />
        <zg:Min xsi:nil="true" />
        <zg:Max xsi:nil="true" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>debug.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HomingResult</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:Address>49</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>49</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:IsArray>false</harp:IsArray>
        </harp:Register>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="19" To="26" Label="Source1" />
      <Edge From="19" To="27" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>